PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = DPT_eye-tracking_V0-5
  Units = pix
  Screen = 1
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Routines
  Routine Dot3
    TextComponent DotFix3
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent text_3
      text = :
      pos [set every repeat] = [DotPos, 0]
      startVal [time (s)] = 0.0
      font = Arial Black
      letterHeight = 50
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    KeyboardComponent key_resp_4
      correctAns = $Correct
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine Dot2
    TextComponent DotFix2
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent text_2
      text = :
      pos [set every repeat] = [DotPos, 0]
      startVal [time (s)] = 0.0
      font = Arial Black
      letterHeight = 50
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    KeyboardComponent key_resp_3
      correctAns = $Correct
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine Dot1
    TextComponent DotFix1
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent text
      text = :
      pos [set every repeat] = [DotPos, 0]
      startVal [time (s)] = 0.0
      font = Arial Black
      letterHeight = 50
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    KeyboardComponent key_resp2
      correctAns = $Correct
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine PracDot
    TextComponent PracFix3
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 50
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    TextComponent PracDot1
      text = :
      pos [set every repeat] = [DotPos, 0]
      startVal [time (s)] = 0.0
      font = Arial Black
      letterHeight = 50
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    KeyboardComponent PracResp1
      correctAns = $Correct
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent FB2
      Begin Experiment:
        msg2=''#create an empty string for later
        msg3=''#create an empty string for later
      Begin Routine:
        corrTrials = PracTrials.data['PracResp1.corr']

        meanRt = PracTrials.data['PracResp1.rt'].mean()

        msg2 = "You got %i Practice Trials correct" %(corrTrials.sum())

        msg3 =  "Your average time was...%.2f seconds" %(meanRt)
    TextComponent PracFinish
      wrapWidth = 800
      pos = [0, 150]
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        You have finished the practice version of the experiment.
    TextComponent AverageTime
      wrapWidth = 800
      text [set every repeat] = $msg3
      pos = [0, 100]
      startVal [time (s)] = 0.0
      letterHeight = 30
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    TextComponent feedbackmsg
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text [set every repeat]:
        $msg2
    TextComponent PressSpacebar
      text = Press the SPACEBAR to Continue
      pos = [0, -100]
      startVal [time (s)] = 0.0
      letterHeight = 30
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Instr
    TextComponent WelcomeText
      wrapWidth = 900
      text = Welcome to the second part of the Experiment.
      pos = [0, 180]
      startVal [time (s)] = 0.0
      letterHeight = 30
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    TextComponent InstructionsText
      wrapWidth = 500
      text = You should have been presented with written instructions about the task you are about to complete.
      pos = [0, 80]
      startVal [time (s)] = 0.0
      letterHeight = 30
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    TextComponent PracticeText
      wrapWidth = 900
      text = You have 12 practice trials to familiarise yourself with the task.
      pos = [0, -40]
      startVal [time (s)] = 0.0
      letterHeight = 30
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    TextComponent PracSpacebartext
      text = Press the SPACEBAR to begin.
      pos = [0, -120]
      startVal [time (s)] = 0.0
      letterHeight = 30
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    KeyboardComponent Start_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine fix
    CodeComponent code
      End Routine:
        thisExp.addData('ITI', ITI)
      Each Frame:
        import random

        ITI = random.randint(700,1500)

        ITI = ITI * 0.001
    TextComponent fix1
      text = +
      stopVal [time (s)] = $ITI
      startVal [time (s)] = 0.0
      letterHeight = 50
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    StaticComponent ISI_2
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 0.0
  Routine TrialFB
    CodeComponent FB1
      Begin Experiment:
        msg1=''
      Begin Routine:
        if PracResp1.corr:#stored on last run routine
          msg1="Correct! RT=%.3f" %(PracResp1.rt)
        else:
          msg1="Oops! That was wrong"
    TextComponent FBmessage
      text [set every repeat] = $msg1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 30
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  Routine fix3
    TextComponent text3
      text = +
      stopVal [duration (s)] = $ITI
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine fix2
    TextComponent text2
      text = +
      stopVal [duration (s)] = $ITI
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine PracFix
    CodeComponent code_2
      Each Frame:
        import random

        ITI = random.randint(500,1500)

        ITI = ITI * 0.001
    TextComponent PracFix1
      text = +
      stopVal [duration (s)] = $ITI
      startVal [time (s)] = 0.0
      letterHeight = 50
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
    TextComponent MidFix1
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 50
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    ImageComponent Image1
      stopVal [duration (s)] = 2
      pos = [-400, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = 'images/' + str($Pic1) + '.jpg'
      size = [512, 384]
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    ImageComponent Image2
      stopVal [duration (s)] = 2
      pos = [400, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = 'images/' + str($Pic2) + '.jpg'
      size = [512, 384]
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  Routine SOA
    TextComponent text_4
      stopVal [duration (s)] = $SOA
      startVal [time (s)] = 0.0
      letterHeight = 0.0
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  Routine End
    TextComponent EndOfExperiment
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
            End of Experiment


        Thank you for taking part.
  Routine PracTrial
    TextComponent PracFix2
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 50
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    ImageComponent PracImage1
      stopVal [duration (s)] = 2
      pos = [-400, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = 'practice/' + str($Pic1) + '.jpg'
      size = [325, 450]
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    ImageComponent PracImage2
      stopVal [duration (s)] = 2
      pos = [400, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = 'practice/' + str($Pic2) + '.jpg'
      size = [325, 450]
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  Routine Break
    TextComponent ShortBreak
      stopVal [duration (s)] = 30.0
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        You now have a 30 second break.
    TextComponent end_of_break
      text = Press the SPACE key to begin the next block of trials
      startVal [time (s)] = 30
      letterHeight = 30
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    KeyboardComponent end_of_break_response
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 30
      store = nothing
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Flow
  Routine Instr
  LoopInitiator PracTrials loopType="TrialHandler"
    conditionsFile = Practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'SOA': 0.5, u'DotPos': 400, u'Pic1': 1, u'Pic2': 2, u'Correct': u'right'},
      {u'SOA': 0.2, u'DotPos': -400, u'Pic1': 3, u'Pic2': 4, u'Correct': u'left'},
      {u'SOA': 2.5, u'DotPos': 400, u'Pic1': 5, u'Pic2': 6, u'Correct': u'right'},
      {u'SOA': 0.5, u'DotPos': -400, u'Pic1': 1, u'Pic2': 2, u'Correct': u'left'},
      {u'SOA': 2.5, u'DotPos': 400, u'Pic1': 3, u'Pic2': 4, u'Correct': u'right'},
      {u'SOA': 0.5, u'DotPos': 400, u'Pic1': 5, u'Pic2': 6, u'Correct': u'right'},
      {u'SOA': 0.2, u'DotPos': -400, u'Pic1': 1, u'Pic2': 2, u'Correct': u'left'},
      {u'SOA': 2.5, u'DotPos': 400, u'Pic1': 3, u'Pic2': 4, u'Correct': u'right'},
      {u'SOA': 0.2, u'DotPos': -400, u'Pic1': 5, u'Pic2': 6, u'Correct': u'left'},
      {u'SOA': 0.5, u'DotPos': 400, u'Pic1': 1, u'Pic2': 2, u'Correct': u'right'},
      {u'SOA': 0.2, u'DotPos': -400, u'Pic1': 3, u'Pic2': 4, u'Correct': u'left'},
      {u'SOA': 2.5, u'DotPos': 400, u'Pic1': 5, u'Pic2': 6, u'Correct': u'right'}]
    Routine PracFix
    Routine PracTrial
    Routine PracDot
    Routine TrialFB
  LoopTerminator PracTrials
  Routine Feedback
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'block': u'block_1'},
      {u'block': u'block_2'},
      {u'block': u'block_3'},
      {u'block': u'block_4'}]
    LoopInitiator trial_block loopType="TrialHandler"
      conditionsFile = $block
      loopType = random
      nReps = 1
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      Routine fix
      Routine trial
      Routine Dot1
    LoopTerminator trial_block
    Routine Break
  LoopTerminator block_loop
  Routine End
